/* 
 * REQUIRES: 
 *  morph/<cellname>.hoc
 *  param_files/model_<cellname>.hoc
 */
 
// These do not vary per cell, for now.
celsius=34
v_init=-74

Ri = PARAM_Ra         // ohm cm
Cm = PARAM_cm         // uf/cm2
G_pas = PARAM_g_pas   // ohm cm2
E_pas = PARAM_e_pas   // mV
H_dist = PARAM_H_dist  // um

NOT_YET_DISPLAYED = 1

proc init() {

    xopen("init_passive.hoc")
    if (INSERT_ACTIVES) {
        xopen("init_active.hoc")
        xopen("init_Ih.hoc")
    }

    finitialize(v_init)
    if (cvode.active()) {
      cvode.re_init()
    } else {
      fcurrent()
    }
    frecord_init()    
    NOT_YET_DISPLAYED = 0
}
